PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = stroop_task
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = circle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      units = pix
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    TextComponent text
      color [set every repeat] = $colour
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 5.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys = 'r','b',
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine ins
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = welcome
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  Routine thx
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        thank you
Flow
  Routine ins
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/hp/OneDrive/Desktop/cond.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'word': 'RED', 'colour': 'red', 'stim_condition': 'C', 'correct_res': 'r'},
      {'word': 'RED', 'colour': 'blue', 'stim_condition': 'I', 'correct_res': 'b'},
      {'word': 'BLUE', 'colour': 'red', 'stim_condition': 'I', 'correct_res': 'r'},
      {'word': 'BLUE', 'colour': 'blue', 'stim_condition': 'C', 'correct_res': 'b'}]
    Routine trial
  LoopTerminator trials
  Routine thx
