<?xml version="1.0" ?>
<PsychoPy2experiment encoding="utf-8" version="2024.1.5">
  <Settings>
    <Param val="3" valType="str" updates="None" name="Audio latency priority"/>
    <Param val="ptb" valType="str" updates="None" name="Audio lib"/>
    <Param val="" valType="str" updates="None" name="Completed URL"/>
    <Param val="auto" valType="str" updates="None" name="Data file delimiter"/>
    <Param val="u'data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])" valType="code" updates="None" name="Data filename"/>
    <Param val="True" valType="bool" updates="None" name="Enable Escape"/>
    <Param val="" valType="str" updates="None" name="End Message"/>
    <Param val="{'participant': 'f&quot;{randint(0, 999999):06.0f}&quot;', 'session': '001'}" valType="code" updates="None" name="Experiment info"/>
    <Param val="True" valType="bool" updates="None" name="Force stereo"/>
    <Param val="False" valType="bool" updates="None" name="Full-screen window"/>
    <Param val="" valType="str" updates="None" name="HTML path"/>
    <Param val="" valType="str" updates="None" name="Incomplete URL"/>
    <Param val="testMonitor" valType="str" updates="None" name="Monitor"/>
    <Param val="[]" valType="list" updates="None" name="Resources"/>
    <Param val="False" valType="bool" updates="None" name="Save csv file"/>
    <Param val="False" valType="bool" updates="None" name="Save excel file"/>
    <Param val="False" valType="bool" updates="None" name="Save hdf5 file"/>
    <Param val="True" valType="bool" updates="None" name="Save log file"/>
    <Param val="True" valType="bool" updates="None" name="Save psydat file"/>
    <Param val="True" valType="bool" updates="None" name="Save wide csv file"/>
    <Param val="1" valType="num" updates="None" name="Screen"/>
    <Param val="True" valType="bool" updates="None" name="Show info dlg"/>
    <Param val="True" valType="bool" updates="None" name="Show mouse"/>
    <Param val="height" valType="str" updates="None" name="Units"/>
    <Param val="" valType="str" updates="None" name="Use version"/>
    <Param val="[1280, 720]" valType="list" updates="None" name="Window size (pixels)"/>
    <Param val="none" valType="str" updates="None" name="backgroundFit"/>
    <Param val="" valType="str" updates="None" name="backgroundImg"/>
    <Param val="avg" valType="str" updates="None" name="blendMode"/>
    <Param val="float" valType="str" updates="None" name="clockFormat"/>
    <Param val="{'thisRow.t': 'priority.CRITICAL', 'expName': 'priority.LOW'}" valType="dict" updates="None" name="colPriority"/>
    <Param val="$[0,0,0]" valType="color" updates="None" name="color"/>
    <Param val="rgb" valType="str" updates="None" name="colorSpace"/>
    <Param val="100.1.1.1" valType="str" updates="None" name="elAddress"/>
    <Param val="FILTER_LEVEL_2" valType="str" updates="None" name="elDataFiltering"/>
    <Param val="FILTER_LEVEL_OFF" valType="str" updates="None" name="elLiveFiltering"/>
    <Param val="EYELINK 1000 DESKTOP" valType="str" updates="None" name="elModel"/>
    <Param val="ELLIPSE_FIT" valType="str" updates="None" name="elPupilAlgorithm"/>
    <Param val="PUPIL_AREA" valType="str" updates="None" name="elPupilMeasure"/>
    <Param val="1000" valType="num" updates="None" name="elSampleRate"/>
    <Param val="False" valType="bool" updates="None" name="elSimMode"/>
    <Param val="RIGHT_EYE" valType="str" updates="None" name="elTrackEyes"/>
    <Param val="PUPIL_CR_TRACKING" valType="str" updates="None" name="elTrackingMode"/>
    <Param val="untitled" valType="str" updates="None" name="expName"/>
    <Param val="on Sync" valType="str" updates="None" name="exportHTML"/>
    <Param val="None" valType="str" updates="None" name="eyetracker"/>
    <Param val="" valType="code" updates="None" name="frameRate"/>
    <Param val="Attempting to measure frame rate of screen, please wait..." valType="str" updates="None" name="frameRateMsg"/>
    <Param val="127.0.0.1" valType="str" updates="None" name="gpAddress"/>
    <Param val="4242" valType="num" updates="None" name="gpPort"/>
    <Param val="ioHub" valType="str" updates="None" name="keyboardBackend"/>
    <Param val="warning" valType="code" updates="None" name="logging level"/>
    <Param val="True" valType="bool" updates="None" name="measureFrameRate"/>
    <Param val="('MIDDLE_BUTTON',)" valType="list" updates="None" name="mgBlink"/>
    <Param val="CONTINUOUS" valType="str" updates="None" name="mgMove"/>
    <Param val="0.5" valType="num" updates="None" name="mgSaccade"/>
    <Param val="neon.local" valType="str" updates="None" name="plCompanionAddress"/>
    <Param val="8080" valType="num" updates="None" name="plCompanionPort"/>
    <Param val="True" valType="bool" updates="None" name="plCompanionRecordingEnabled"/>
    <Param val="0.6" valType="num" updates="None" name="plConfidenceThreshold"/>
    <Param val="True" valType="bool" updates="None" name="plPupilCaptureRecordingEnabled"/>
    <Param val="" valType="str" updates="None" name="plPupilCaptureRecordingLocation"/>
    <Param val="127.0.0.1" valType="str" updates="None" name="plPupilRemoteAddress"/>
    <Param val="50020" valType="num" updates="None" name="plPupilRemotePort"/>
    <Param val="1000" valType="num" updates="None" name="plPupilRemoteTimeoutMs"/>
    <Param val="False" valType="bool" updates="None" name="plPupillometryOnly"/>
    <Param val="psychopy_iohub_surface" valType="str" updates="None" name="plSurfaceName"/>
    <Param val="1" valType="code" updates="None" name="runMode"/>
    <Param val="False" valType="bool" updates="None" name="rush"/>
    <Param val="time" valType="str" updates="None" name="sortColumns"/>
    <Param val="" valType="str" updates="None" name="tbLicenseFile"/>
    <Param val="" valType="str" updates="None" name="tbModel"/>
    <Param val="60" valType="num" updates="None" name="tbSampleRate"/>
    <Param val="" valType="str" updates="None" name="tbSerialNo"/>
    <Param val="pyglet" valType="str" updates="None" name="winBackend"/>
  </Settings>
  <Routines>
    <Routine name="trial">
      <RoutineSettingsComponent name="trial" plugin="None">
        <Param val="none" valType="str" updates="None" name="backgroundFit"/>
        <Param val="" valType="str" updates="None" name="backgroundImg"/>
        <Param val="$[0,0,0]" valType="color" updates="None" name="color"/>
        <Param val="rgb" valType="str" updates="None" name="colorSpace"/>
        <Param val="" valType="str" updates="constant" name="desc"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="trial" valType="code" updates="None" name="name"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="" valType="code" updates="constant" name="skipIf"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="" valType="code" updates="constant" name="stopVal"/>
        <Param val="False" valType="bool" updates="None" name="useWindowParams"/>
      </RoutineSettingsComponent>
      <TextComponent name="text" plugin="None">
        <Param val="white" valType="color" updates="constant" name="color"/>
        <Param val="rgb" valType="str" updates="constant" name="colorSpace"/>
        <Param val="1" valType="num" updates="constant" name="contrast"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="None" valType="str" updates="constant" name="flip"/>
        <Param val="Arial" valType="str" updates="constant" name="font"/>
        <Param val="LTR" valType="str" updates="None" name="languageStyle"/>
        <Param val="0.05" valType="num" updates="constant" name="letterHeight"/>
        <Param val="text" valType="code" updates="None" name="name"/>
        <Param val="" valType="num" updates="constant" name="opacity"/>
        <Param val="0" valType="num" updates="constant" name="ori"/>
        <Param val="(0, 0)" valType="list" updates="constant" name="pos"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="0.0" valType="code" updates="None" name="startVal"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="8.0" valType="code" updates="constant" name="stopVal"/>
        <Param val="True" valType="bool" updates="None" name="syncScreenRefresh"/>
        <Param val="$Study_word" valType="str" updates="set every repeat" name="text"/>
        <Param val="from exp settings" valType="str" updates="None" name="units"/>
        <Param val="" valType="code" updates="None" name="validator"/>
        <Param val="" valType="num" updates="constant" name="wrapWidth"/>
      </TextComponent>
      <SliderComponent name="slider" plugin="None">
        <Param val="White" valType="color" updates="constant" name="borderColor"/>
        <Param val="LightGray" valType="color" updates="constant" name="color"/>
        <Param val="rgb" valType="str" updates="constant" name="colorSpace"/>
        <Param val="1" valType="num" updates="constant" name="contrast"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="Red" valType="color" updates="constant" name="fillColor"/>
        <Param val="False" valType="bool" updates="constant" name="flip"/>
        <Param val="Open Sans" valType="str" updates="constant" name="font"/>
        <Param val="True" valType="bool" updates="constant" name="forceEndRoutine"/>
        <Param val="0" valType="num" updates="constant" name="granularity"/>
        <Param val="" valType="code" updates="None" name="initVal"/>
        <Param val="'familiar','unfamiliar'" valType="list" updates="constant" name="labels"/>
        <Param val="0.05" valType="num" updates="constant" name="letterHeight"/>
        <Param val="slider" valType="code" updates="None" name="name"/>
        <Param val="" valType="num" updates="constant" name="opacity"/>
        <Param val="0" valType="num" updates="constant" name="ori"/>
        <Param val="(0, -0.3)" valType="list" updates="constant" name="pos"/>
        <Param val="False" valType="bool" updates="constant" name="readOnly"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="(1.0, 0.1)" valType="list" updates="constant" name="size"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="0.0" valType="code" updates="None" name="startVal"/>
        <Param val="condition" valType="str" updates="None" name="stopType"/>
        <Param val="" valType="code" updates="constant" name="stopVal"/>
        <Param val="False" valType="bool" updates="constant" name="storeHistory"/>
        <Param val="True" valType="bool" updates="constant" name="storeRating"/>
        <Param val="True" valType="bool" updates="constant" name="storeRatingTime"/>
        <Param val="()" valType="list" updates="constant" name="styleTweaks"/>
        <Param val="rating" valType="str" updates="constant" name="styles"/>
        <Param val="True" valType="bool" updates="None" name="syncScreenRefresh"/>
        <Param val="(1, 2, 3, 4, 5)" valType="list" updates="constant" name="ticks"/>
        <Param val="from exp settings" valType="str" updates="None" name="units"/>
        <Param val="" valType="code" updates="None" name="validator"/>
      </SliderComponent>
    </Routine>
    <Routine name="test">
      <RoutineSettingsComponent name="test" plugin="None">
        <Param val="none" valType="str" updates="None" name="backgroundFit"/>
        <Param val="" valType="str" updates="None" name="backgroundImg"/>
        <Param val="$[0,0,0]" valType="color" updates="None" name="color"/>
        <Param val="rgb" valType="str" updates="None" name="colorSpace"/>
        <Param val="" valType="str" updates="constant" name="desc"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="test" valType="code" updates="None" name="name"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="" valType="code" updates="constant" name="skipIf"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="" valType="code" updates="constant" name="stopVal"/>
        <Param val="False" valType="bool" updates="None" name="useWindowParams"/>
      </RoutineSettingsComponent>
      <TextComponent name="text_2" plugin="None">
        <Param val="white" valType="color" updates="constant" name="color"/>
        <Param val="rgb" valType="str" updates="constant" name="colorSpace"/>
        <Param val="1" valType="num" updates="constant" name="contrast"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="None" valType="str" updates="constant" name="flip"/>
        <Param val="Arial" valType="str" updates="constant" name="font"/>
        <Param val="LTR" valType="str" updates="None" name="languageStyle"/>
        <Param val="0.05" valType="num" updates="constant" name="letterHeight"/>
        <Param val="text_2" valType="code" updates="None" name="name"/>
        <Param val="" valType="num" updates="constant" name="opacity"/>
        <Param val="0" valType="num" updates="constant" name="ori"/>
        <Param val="(0, 0.3)" valType="list" updates="constant" name="pos"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="0.0" valType="code" updates="None" name="startVal"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="10" valType="code" updates="constant" name="stopVal"/>
        <Param val="True" valType="bool" updates="None" name="syncScreenRefresh"/>
        <Param val="$test_word" valType="str" updates="set every repeat" name="text"/>
        <Param val="from exp settings" valType="str" updates="None" name="units"/>
        <Param val="" valType="code" updates="None" name="validator"/>
        <Param val="" valType="num" updates="constant" name="wrapWidth"/>
      </TextComponent>
      <TextboxComponent name="textbox" plugin="None">
        <Param val="center" valType="str" updates="constant" name="alignment"/>
        <Param val="center" valType="str" updates="constant" name="anchor"/>
        <Param val="True" valType="bool" updates="constant" name="autoLog"/>
        <Param val="False" valType="bool" updates="constant" name="bold"/>
        <Param val="None" valType="color" updates="constant" name="borderColor"/>
        <Param val="2" valType="num" updates="constant" name="borderWidth"/>
        <Param val="white" valType="color" updates="constant" name="color"/>
        <Param val="rgb" valType="str" updates="constant" name="colorSpace"/>
        <Param val="1" valType="num" updates="constant" name="contrast"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="True" valType="bool" updates="constant" name="editable"/>
        <Param val="None" valType="color" updates="constant" name="fillColor"/>
        <Param val="False" valType="bool" updates="constant" name="flipHoriz"/>
        <Param val="False" valType="bool" updates="constant" name="flipVert"/>
        <Param val="Arial" valType="str" updates="constant" name="font"/>
        <Param val="False" valType="bool" updates="constant" name="italic"/>
        <Param val="LTR" valType="str" updates="None" name="languageStyle"/>
        <Param val="0.05" valType="num" updates="constant" name="letterHeight"/>
        <Param val="1.0" valType="num" updates="constant" name="lineSpacing"/>
        <Param val="textbox" valType="code" updates="None" name="name"/>
        <Param val="" valType="num" updates="constant" name="opacity"/>
        <Param val="0" valType="num" updates="constant" name="ori"/>
        <Param val="visible" valType="str" updates="constant" name="overflow"/>
        <Param val="0" valType="num" updates="constant" name="padding"/>
        <Param val="Type here..." valType="str" updates="constant" name="placeholder"/>
        <Param val="(0, 0)" valType="list" updates="constant" name="pos"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="(0.5, 0.5)" valType="list" updates="constant" name="size"/>
        <Param val="" valType="list" updates="constant" name="speechPoint"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="0.0" valType="code" updates="None" name="startVal"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="10" valType="code" updates="constant" name="stopVal"/>
        <Param val="True" valType="bool" updates="None" name="syncScreenRefresh"/>
        <Param val="" valType="str" updates="constant" name="text"/>
        <Param val="from exp settings" valType="str" updates="None" name="units"/>
        <Param val="" valType="code" updates="None" name="validator"/>
      </TextboxComponent>
      <TextComponent name="text_3" plugin="None">
        <Param val="white" valType="color" updates="constant" name="color"/>
        <Param val="rgb" valType="str" updates="constant" name="colorSpace"/>
        <Param val="1" valType="num" updates="constant" name="contrast"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="None" valType="str" updates="constant" name="flip"/>
        <Param val="Arial" valType="str" updates="constant" name="font"/>
        <Param val="LTR" valType="str" updates="None" name="languageStyle"/>
        <Param val="0.05" valType="num" updates="constant" name="letterHeight"/>
        <Param val="text_3" valType="code" updates="None" name="name"/>
        <Param val="" valType="num" updates="constant" name="opacity"/>
        <Param val="0" valType="num" updates="constant" name="ori"/>
        <Param val="(0, -0.3)" valType="list" updates="constant" name="pos"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="0.0" valType="code" updates="None" name="startVal"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="10" valType="code" updates="constant" name="stopVal"/>
        <Param val="True" valType="bool" updates="None" name="syncScreenRefresh"/>
        <Param val="click to submit" valType="str" updates="constant" name="text"/>
        <Param val="from exp settings" valType="str" updates="None" name="units"/>
        <Param val="" valType="code" updates="None" name="validator"/>
        <Param val="" valType="num" updates="constant" name="wrapWidth"/>
      </TextComponent>
      <MouseComponent name="mouse" plugin="None">
        <Param val="text_3" valType="list" updates="constant" name="clickable"/>
        <Param val="" valType="list" updates="constant" name="correctAns"/>
        <Param val="False" valType="bool" updates="None" name="disabled"/>
        <Param val="" valType="code" updates="None" name="durationEstim"/>
        <Param val="valid click" valType="str" updates="constant" name="forceEndRoutineOnPress"/>
        <Param val="mouse" valType="code" updates="None" name="name"/>
        <Param val="True" valType="bool" updates="constant" name="newClicksOnly"/>
        <Param val="on click" valType="str" updates="None" name="saveMouseState"/>
        <Param val="name," valType="list" updates="constant" name="saveParamsClickable"/>
        <Param val="True" valType="bool" updates="None" name="saveStartStop"/>
        <Param val="" valType="code" updates="None" name="startEstim"/>
        <Param val="time (s)" valType="str" updates="None" name="startType"/>
        <Param val="0.0" valType="code" updates="None" name="startVal"/>
        <Param val="duration (s)" valType="str" updates="None" name="stopType"/>
        <Param val="10" valType="code" updates="constant" name="stopVal"/>
        <Param val="False" valType="bool" updates="constant" name="storeCorrect"/>
        <Param val="False" valType="bool" updates="None" name="syncScreenRefresh"/>
        <Param val="mouse onset" valType="str" updates="constant" name="timeRelativeTo"/>
      </MouseComponent>
    </Routine>
  </Routines>
  <Flow>
    <LoopInitiator loopType="TrialHandler" name="trials">
      <Param name="Selected rows" updates="None" val="" valType="str"/>
      <Param name="conditions" updates="None" val="[{'Study_word': 'book'}, {'Study_word': 'cushion'}, {'Study_word': 'phone'}, {'Study_word': 'marble'}, {'Study_word': 'board'}, {'Study_word': 'Laptop'}, {'Study_word': 'Chart'}, {'Study_word': 'T-shirt'}, {'Study_word': 'mouse'}, {'Study_word': 'Pastry'}, {'Study_word': 'Case'}, {'Study_word': 'Cruise'}, {'Study_word': 'Police'}, {'Study_word': 'Keys'}, {'Study_word': 'Poster'}]" valType="str"/>
      <Param name="conditionsFile" updates="None" val="study_words.xlsx" valType="file"/>
      <Param name="endPoints" updates="None" val="[0, 1]" valType="num"/>
      <Param name="isTrials" updates="None" val="True" valType="bool"/>
      <Param name="loopType" updates="None" val="random" valType="str"/>
      <Param name="nReps" updates="None" val="1" valType="num"/>
      <Param name="name" updates="None" val="trials" valType="code"/>
      <Param name="random seed" updates="None" val="" valType="code"/>
    </LoopInitiator>
    <Routine name="trial"/>
    <LoopTerminator name="trials"/>
    <LoopInitiator loopType="TrialHandler" name="trials_2">
      <Param name="Selected rows" updates="None" val="" valType="str"/>
      <Param name="conditions" updates="None" val="[{'test_word': 'l_pt_p', 'References': 'Laptop', 'old_new': 'old'}, {'test_word': '_ha_t', 'References': 'Chart', 'old_new': 'old'}, {'test_word': 'T_hi_t', 'References': 'Tshirt', 'old_new': 'old'}, {'test_word': '_ou_se', 'References': 'mouse', 'old_new': 'old'}, {'test_word': 'P_as_tr_', 'References': 'Pastry', 'old_new': 'old'}, {'test_word': 'c_s_', 'References': 'Case', 'old_new': 'old'}, {'test_word': '_ru_is_', 'References': 'Cruise', 'old_new': 'old'}, {'test_word': 'P_li_e', 'References': 'Police', 'old_new': 'old'}, {'test_word': 'K_y_', 'References': 'Keys', 'old_new': 'old'}, {'test_word': 'P_st_r', 'References': 'Poster', 'old_new': 'old'}, {'test_word': '_o_rd', 'References': 'Board', 'old_new': 'old'}, {'test_word': '_a_bl_', 'References': 'Marble', 'old_new': 'old'}, {'test_word': '_ho_e', 'References': 'Phone', 'old_new': 'old'}, {'test_word': '_oo_', 'References': 'Book', 'old_new': 'old'}, {'test_word': 'c_s_io_', 'References': 'Cushion', 'old_new': 'old'}, {'test_word': 'ta_l_', 'References': 'Table', 'old_new': 'new'}, {'test_word': 'p_nc_l', 'References': 'Pencil', 'old_new': 'new'}, {'test_word': 'v_s_', 'References': 'Vase', 'old_new': 'new'}, {'test_word': 'bo_t_e', 'References': 'Bottle', 'old_new': 'new'}, {'test_word': 'c_m_ra', 'References': 'Camera', 'old_new': 'new'}]" valType="str"/>
      <Param name="conditionsFile" updates="None" val="C:/Users/hp/Downloads/PsychoPy_Tutorial/Word priming/test_words.xlsx" valType="file"/>
      <Param name="endPoints" updates="None" val="[0, 1]" valType="num"/>
      <Param name="isTrials" updates="None" val="True" valType="bool"/>
      <Param name="loopType" updates="None" val="random" valType="str"/>
      <Param name="nReps" updates="None" val="1" valType="num"/>
      <Param name="name" updates="None" val="trials_2" valType="code"/>
      <Param name="random seed" updates="None" val="" valType="code"/>
    </LoopInitiator>
    <Routine name="test"/>
    <LoopTerminator name="trials_2"/>
  </Flow>
</PsychoPy2experiment>
