PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  expName = emotional stroop task
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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  Routine StroopTask
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    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Word
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    KeyboardComponent key_resp
      allowedKeys = 'r', 'b', 'g', 'y', 'p', 'o', 'k', 'v', 'w', 'n'
      correctAns = $Correct_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine fixation
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine association
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $Word
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    PolygonComponent polygon
      fillColor [set every repeat] = $Color
      pos = (0, -0.2)
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 3.0
      stopVal [duration (s)] = 1.5
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  Routine Break
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will now be asked to recall the colors associated with the words you just saw.

        Please press the following keys for each color:

        Red     - r
        Blue    - b
        Green   - g
        Yellow  - y
        Pink    - p
        Orange  - o
        Black   - k
        Violet  - v
        White   - w
        Brown   - n

        Press any key to continue.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = stroop_cons.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Word': 'Love', 'Color': 'Red', 'Correct_resp': 'r'},
      {'Word': 'Joy', 'Color': 'Blue', 'Correct_resp': 'b'},
      {'Word': 'Peace', 'Color': 'Green', 'Correct_resp': 'g'},
      {'Word': 'Hope', 'Color': 'Yellow', 'Correct_resp': 'y'},
      {'Word': 'Dream', 'Color': 'Pink', 'Correct_resp': 'p'},
      {'Word': 'Happiness', 'Color': 'Orange', 'Correct_resp': 'o'},
      {'Word': 'Hate', 'Color': 'Black', 'Correct_resp': 'k'},
      {'Word': 'Fear', 'Color': 'Violet', 'Correct_resp': 'v'},
      {'Word': 'Death', 'Color': 'White', 'Correct_resp': 'w'},
      {'Word': 'Grief', 'Color': 'Brown', 'Correct_resp': 'n'},
      {'Word': 'Table', 'Color': 'Green', 'Correct_resp': 'g'},
      {'Word': 'Chair', 'Color': 'Yellow', 'Correct_resp': 'y'},
      {'Word': 'Cloud', 'Color': 'Pink', 'Correct_resp': 'p'},
      {'Word': 'Brick', 'Color': 'Orange', 'Correct_resp': 'o'},
      {'Word': 'Window', 'Color': 'Black', 'Correct_resp': 'k'},
      {'Word': 'Lamp', 'Color': 'Violet', 'Correct_resp': 'v'},
      {'Word': 'Pen', 'Color': 'White', 'Correct_resp': 'w'},
      {'Word': 'Bottle', 'Color': 'Brown', 'Correct_resp': 'n'},
      {'Word': 'Paper', 'Color': 'Red', 'Correct_resp': 'r'},
      {'Word': 'Wall', 'Color': 'Blue', 'Correct_resp': 'b'}]
    Routine association
  LoopTerminator trials_2
  Routine Break
  Routine fixation
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stroop_cons.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Word': 'Love', 'Color': 'Red', 'Correct_resp': 'r'},
      {'Word': 'Joy', 'Color': 'Blue', 'Correct_resp': 'b'},
      {'Word': 'Peace', 'Color': 'Green', 'Correct_resp': 'g'},
      {'Word': 'Hope', 'Color': 'Yellow', 'Correct_resp': 'y'},
      {'Word': 'Dream', 'Color': 'Pink', 'Correct_resp': 'p'},
      {'Word': 'Happiness', 'Color': 'Orange', 'Correct_resp': 'o'},
      {'Word': 'Hate', 'Color': 'Black', 'Correct_resp': 'k'},
      {'Word': 'Fear', 'Color': 'Violet', 'Correct_resp': 'v'},
      {'Word': 'Death', 'Color': 'White', 'Correct_resp': 'w'},
      {'Word': 'Grief', 'Color': 'Brown', 'Correct_resp': 'n'},
      {'Word': 'Table', 'Color': 'Green', 'Correct_resp': 'g'},
      {'Word': 'Chair', 'Color': 'Yellow', 'Correct_resp': 'y'},
      {'Word': 'Cloud', 'Color': 'Pink', 'Correct_resp': 'p'},
      {'Word': 'Brick', 'Color': 'Orange', 'Correct_resp': 'o'},
      {'Word': 'Window', 'Color': 'Black', 'Correct_resp': 'k'},
      {'Word': 'Lamp', 'Color': 'Violet', 'Correct_resp': 'v'},
      {'Word': 'Pen', 'Color': 'White', 'Correct_resp': 'w'},
      {'Word': 'Bottle', 'Color': 'Brown', 'Correct_resp': 'n'},
      {'Word': 'Paper', 'Color': 'Red', 'Correct_resp': 'r'},
      {'Word': 'Wall', 'Color': 'Blue', 'Correct_resp': 'b'}]
    Routine StroopTask
  LoopTerminator trials
  Routine trial
